CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?:[^_]*_){2}(?P<Deletion>[^_]+)_(?P<Plasmid>[^_]+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
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    Name to assign these objects:Segment
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Deletion
    Metadata category:Plasmid

MeasureObjectIntensity:[module_num:5|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
    Select images to measure:GFP
    Select objects to measure:Segment

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Segment
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:7|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Segment
    Measurement to display:Intensity_MaxIntensity_GFP
    Select the image on which to display the measurements:GFP
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/PolyX/Microscope/elongation_PolyE/all_data/\g<Deletion>/\g<Plasmid>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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